PsychoPy2experiment version="2022.2.5"
Settings
  Audio lib = ptb
  Data file delimiter = comma
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['stimuli/1h.wav', 'stimuli/1nh.wav', 'stimuli/2h.wav', 'stimuli/2nh.wav', 'stimuli/3h.wav', 'stimuli/3nh.wav', 'stimuli/4h.wav', 'stimuli/4nh.wav', 'stimuli/5h.wav', 'stimuli/5nh.wav', 'stimuli/6h.wav', 'stimuli/6nh.wav', 'stimuli/7h.wav', 'stimuli/7nh.wav', 'stimuli/8h.wav', 'stimuli/8nh.wav', 'stimuli/9h.wav', 'stimuli/9nh.wav', 'stimuli/10h.wav', 'stimuli/10nh.wav']
  Save excel file = True
  Screen = 2
  Units = pix
  Use version = 2022.2.5
  Window size (pixels) = [1920, 1080]
  color = 1.0000, 1.0000, 1.0000
  expName = emergency-libet
  keyboardBackend = ioHub
  logging level = data
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Routines
  Routine consent
    TextboxComponent consent_text
      autoLog = False
      bold = False
      borderWidth = .05
      color = Black
      editable = False
      letterHeight = 0.025
      padding = 0.1
      saveStartStop = False
      size = (1, 1)
      startVal [time (s)] = 0.0
      units = height
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      text:
        Geïnformeerde toestemming: Spoedonderzoek

        Ik heb de informatiebrief voor deelnemers gelezen.

        Ik kreeg de gelegenheid om vragen te stellen.

        Ik heb voldoende tijd gehad om te beslissen of ik wilde deelnemen of niet.

        Ik weet dat deelname geheel vrijwillig is. Ik weet dat ik te allen tijde kan besluiten om niet deel te nemen.

        Ik geef toestemming om mijn gegevens te gebruiken voor de in de informatiebrief genoemde doeleinden.

        Ik weet dat sommige mensen toegang zullen hebben tot mijn gegevens. Deze mensen worden genoemd in de informatiebrief.

        Ik wil deelnemen aan dit onderzoek.
    KeyboardComponent next_press_5
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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    TextboxComponent next_text_5
      autoLog = False
      bold = False
      borderColor = black
      borderWidth = .05
      color = black
      editable = False
      letterHeight = 0.0175
      lineSpacing = 1
      padding = .1
      pos = (0, -0.4)
      saveStartStop = False
      size = (.7,.1)
      startVal [time (s)] = 0.0
      text = Ik heb de bovenstaande informatie gelezen en begrepen en door op "enter" te drukken geef ik toestemming om deel te nemen aan dit experiment in de wetenschap dat de gegevens zullen worden geregistreerd.
      units = height
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  Routine debriefing
    TextboxComponent debriefing_text
      bold = False
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.025
      padding = 0.15
      size = (0.95, 0.95)
      startVal [time (s)] = 0.0
      text = Je bent klaar met het experiment. Bedankt voor je deelname. Ga nu naar de proefleider.
      units = height
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  Routine training_3_trial_sound
    SoundComponent training_3_sound_2
      sound = stimuli/1_no.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.5
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    PolygonComponent fixation_3
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.5
      units = norm
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  Routine training_1_instructions
    TextboxComponent training_1_instructions_text
      autoLog = False
      bold = False
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.025
      padding = 0.15
      saveStartStop = False
      size = (0.95, 0.95)
      startVal [time (s)] = 0.0
      units = height
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      text:
        Je gaat nu luisteren naar een situatie. Luister er aandachtig naar.

        Probeer je in de situatie in te leven alsof je er zelf aanwezig bent.

        Er zal ook een klok op het scherm staan, daarover later meer.

        Voor nu is het alleen belangrijk dat je op de klok focust terwijl je naar de situatie luistert.
    KeyboardComponent next_press_8
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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    TextboxComponent next_text_8
      autoLog = False
      bold = False
      borderColor = black
      color = black
      editable = False
      letterHeight = 0.02
      padding = 0.01
      pos = (.45, -0.4)
      saveStartStop = False
      size = (.2,.08)
      startVal [time (s)] = 0.0
      text = druk op “enter” om naar het scenario te luisteren
      units = height
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  Routine pre_instructions_1
    TextboxComponent pre_instructions_1_text
      autoLog = False
      bold = False
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.025
      padding = 0.2
      saveStartStop = False
      size = (0.95, 0.95)
      startVal [time (s)] = 0.0
      units = height
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      text:
        Dit onderzoek gaat over je vermogen om je in te leven in sociale situaties. Het inlevingsvermogen is van belang om in te schatten hoe anderen mensen zich voelen, wat ze denken en wat ze gaan doen. Door je in te leven zit je als het ware in een situatie en weet je wat je aan anderen hebt en wat jij voor hen kunt doen.

        In dit onderzoek gaan we je een aantal situaties voorleggen waar iemand iets overkomt. Deze situaties zijn gekozen n.a.v. een groot onderzoek. In dit onderzoek gaven mensen aan dat ze de situaties wel eens mee hebben gemaakt. In elke situatie kan het zijn dat iemand hulp of geen hulp nodig heeft. Dit hangt af van de context in de situatie. We gaan je in elke situatie vragen wat je zou doen: helpen of niet helpen. Probeer je alsjeblieft in iedere situatie in te leven en voor te stellen hoe het zou zijn in de situatie.
    KeyboardComponent next_press_6
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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    TextboxComponent next_text_6
      autoLog = False
      bold = False
      borderColor = black
      color = black
      editable = False
      letterHeight = 0.02
      padding = 0.01
      pos = (.45, -0.4)
      saveStartStop = False
      size = (.2,.08)
      startVal [time (s)] = 0.0
      text = druk op "enter" om door te gaan
      units = height
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  Routine pre_instructions_2
    TextboxComponent pre_instructions_2_text
      autoLog = False
      bold = False
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.025
      padding = 0.15
      saveStartStop = False
      size = (1, 1)
      startVal [time (s)] = 0.0
      units = height
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      text:
        Zet de hoofdtelefoon op. Elke situatie wordt via de hoofdtelefoon vertelt. De uitleg van de situatie is kort, dus het is van belang om iedere keer goed op te letten en dat je je probeert in te leven.
        We gaan dit eerst oefenen zodat je later weet wat je te wachten staat.
    KeyboardComponent next_press_7
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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    TextboxComponent next_text_7
      autoLog = False
      bold = False
      borderColor = black
      color = black
      editable = False
      letterHeight = 0.02
      padding = 0.01
      pos = (.45, -0.4)
      saveStartStop = False
      size = (.2,.08)
      startVal [time (s)] = 0.0
      text = druk op "enter" om door te gaan
      units = height
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  Routine training_1_trial_1
    CodeComponent training_1_trial_1_code
      Code Type = Py
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      Begin Routine:
        # create sound and set its parameters
        training_1_sound = sound.Sound(soundpath_t1,
            stopTime = duration_t1,
            loops = 0,
            volume = 1)

        training_1_sound.play()

        # draw all clock objects
        clock_static()

        win.flip() # update the screen

        core.wait(duration_t1 + 1) # need to wait slightly longer than the duration of the audio to prevent audio overlap

        if t > duration_t1 + 1:
            continueRoutine = False

        # check for escape key press to exit
        if event.getKeys(keyList=['escape']):
            win.close()
  Routine training_1_trial_2
    CodeComponent training_1_trial_2_code
      Code Type = Py
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      Begin Routine:
        # create sound and set its parameters
        duration = 4

        training_1_trial_2_sound = sound.Sound("stimuli/2ha.ogg",
            stopTime = duration,
            loops = 0,
            volume = 1,
            sampleRate=48000) # storing as object so that we can later call the status properties

        training_1_trial_2_sound.play() # play the sound

        # draw all clock objects
        clock_circle.draw()
        center_dot.draw()
        for ticks_a in ticks_large:
            ticks_a.draw()
        #for labels in clock_labels:
            #labels.draw()

        win.flip() # update the screen

        core.wait(duration + 1)

        if t > duration + 1:
            continueRoutine = False

        # check for escape key press to exit, only for development
        if event.getKeys(keyList=['escape']):
            win.close()
  Routine training_2_instructions_1
    TextboxComponent training_2_instructions_1_text
      autoLog = False
      bold = False
      borderWidth = .05
      color = black
      editable = False
      letterHeight = 0.025
      padding = 0.1
      pos = (0, -.2)
      saveStartStop = False
      size = (0.95, 0.95)
      startVal [time (s)] = 0.0
      text = We gaan nu iets toevoegen aan de luister taak. D.w.z.: we gaan je vragen om te helpen of om niet te helpen door op een knop te drukken. De knop met de pijl omhoog betekent HEEN en de knop met de pijl omlaag betekent WEG. HEEN staat dan voor: er heen gaan en helpen, en WEG staat voor weggaan en niet helpen. We gaan dit eerst een paar keer oefenen.
      units = height
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    ImageComponent arrowkeys
      image = stimuli/arrowkeys_1.png
      pos = (0, .2)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent next_press_9
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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    TextboxComponent next_text_9
      autoLog = False
      bold = False
      borderColor = black
      color = black
      editable = False
      letterHeight = 0.02
      padding = 0.01
      pos = (.45, -0.4)
      saveStartStop = False
      size = (.2,.08)
      startVal [time (s)] = 0.0
      text = druk op "enter" om door te gaan
      units = height
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  Routine training_2_instructions_2
    TextboxComponent training_2_instructions_2_text
      autoLog = False
      bold = False
      borderWidth = .05
      color = black
      editable = False
      letterHeight = 0.025
      padding = 0.1
      pos = (0, .3)
      saveStartStop = False
      size = (1, 1)
      startVal [time (s)] = 0.0
      units = height
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      text:
        Kijk goed naar het volgende plaatje. Plaats de middelvinger van je linkerhand op de bovenste pijltjestoets. Plaats de wijsvinger van je linkerhand op de onderste pijltoets. Gebruik je rechterhand om op "enter" te drukken om vooruit te gaan.
    KeyboardComponent next_press_10
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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    TextboxComponent next_text_10
      autoLog = False
      bold = False
      borderColor = black
      color = black
      editable = False
      letterHeight = 0.02
      padding = 0.01
      pos = (.45, -0.4)
      saveStartStop = False
      size = (.2,.08)
      startVal [time (s)] = 0.0
      text = druk op "enter" om door te gaan
      units = height
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    ImageComponent keyboard_instr
      image = stimuli/keyboard.jpg
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      units = height
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  Routine likert
    CodeComponent likert_code
      Code Type = Py
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      Begin Experiment:
        # Likert questions to check whether participants can empathize well with the scenarios, can hear them well, and whether they believed someone was in need of help or not
        choice= ["heel slecht", "slecht", "redelijk","goed","uitstekend"]
        label = []

        likert_1 = visual.RatingScale( # 1-5 Likert
            win, low = 1, high = 5,
            markerStart = 12, markerColor = 'Black', textSize = 0.5, tickMarks = label, textColor = 'Black', lineColor = 'Black', showAccept = False,
            pos=(0,300), size= 1, marker = 'circle', labels = None, scale = None, choices = choice)

        likert_2 = visual.RatingScale( # 1-5 Likert
            win, low = 1, high = 5,
            markerStart = 12, markerColor = 'Black', textSize = 0.5, tickMarks = label, textColor = 'Black', lineColor = 'Black', showAccept = False,
            pos=(0,0), size= 1, marker = 'circle', labels = None, scale = None, choices = choice)

        likert_3 = visual.RatingScale( # dichotomous
            win, low = 1, high = 5, choices =["hulp nodig", "geen hulp nodig"],
            markerStart = 12, markerColor = 'Black', textColor = 'Black', lineColor = 'Black', showAccept = False,
            pos=(0,-300), size=1, marker = 'circle', textSize = 0.5)

        item_1 = visual.TextStim(win, text="Heb je goed kunnen horen wat de stem zei? Geef je antwoord aan met een muisklik.", height=.02, units='height', pos=(0, .4), color = 'Black') #"were you able to hear the scenario well?" "indicate with mouseclick"
        item_2 = visual.TextStim(win, text="Heb je je kunnen inleven in de situatie?", height=.02, units='height', pos=(0, 0.125), color = 'Black') #"were you able to empathize/be able to visualize the situation"
        item_3 = visual.TextStim(win, text="Wat gebeurde er? Iemand had:", height=.02, units='height', pos=(0, -0.175), color = 'Black') #"Was someone in need of help or not?"
      Begin Routine:
        win.mouseVisible = True
        while continueRoutine == True: # main loop
            item_1.draw() # draw all items, likert scales, and the next button text
            item_2.draw()
            item_3.draw()
            likert_1.draw()
            likert_2.draw()
            likert_3.draw()
            next_text_2.draw()
            win.flip()

            if event.getKeys(keyList=['escape']): # quit experiment
                core.quit()
            if event.getKeys(keyList=['return']):
                training_1_trials.addData('likert_1', likert_1.getRating()) # crucially, add likert data once enter is pressed
                training_1_trials.addData('likert_2', likert_2.getRating())
                training_1_trials.addData('likert_3', likert_3.getRating())
                likert_1.reset()
                likert_2.reset()
                likert_3.reset()
                likert_1.markerStart = 12 # resets marker to a value beyond the scale. This means in the next trial it is not visible before a value has been entered
                likert_2.markerStart = 12
                likert_3.markerStart = 12
                continueRoutine = False # go to next routine
      End Routine:
        win.mouseVisible = False
  Routine training_2_trial_1
    CodeComponent training_2_trial_code
      Code Type = Py
      Begin Routine:
        # create scenario sound
        training_2_trial_1_sound = sound.Sound(soundpath_t2,
            stopTime = duration_t2,
            loops = 0,
            volume = 1,)

        clock_static() # draw all clock objects & update window
        win.flip()

        # play sound
        training_2_trial_1_sound.play()
        core.wait(duration_t2) # wait for length of scenario file
        core.wait(buffer) # delay to prevent audio overlap
        kies.play() # play action word
        core.wait(0.843) # wait for 0.25 + 0.593 (length of action word soundfiles)
        beep.play()

        # wait for and record the key pressed
        response = event.waitKeys(keyList = keys)
        while continueRoutine == True:
            if response[0] in keys:
                training_2_trials.addData('response', response)
                continueRoutine = False
  Routine training_2_trial_2
    CodeComponent training_2_trial_code_2
      Code Type = Py
      Begin Routine:
        # create sound
        duration = 5
        training_2_trial_1_sound = sound.Sound("stimuli/1na.ogg",
            stopTime = duration,
            loops = 0,
            volume = 1,) # storing as object so that we can later call the status properties

        # draw all clock objects
        clock_circle.draw()
        center_dot.draw()
        for ticks_a in ticks_large:
            ticks_a.draw()
        #for labels in clock_labels:
            #labels.draw()

        # draw image
        heen_weg.draw()

        win.flip()


        # play sound
        training_2_trial_1_sound.play()
        core.wait(duration) # this could be a source of errors, idk if variables are local to begin routine tab or not
        beep.play()

        # create a list of keys to check for responses
        keys = ['up','down']

        # wait for and record the key pressed
        response = event.waitKeys(keyList = keys)
        if response[0] in keys:
            continueRoutine = False
  Routine training_3_instructions
    TextboxComponent training_3_instructions_text
      autoLog = False
      bold = False
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.025
      padding = 0.15
      saveStartStop = False
      size = (0.95, 0.95)
      startVal [time (s)] = 0.0
      units = height
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      text:
        We gaan tenslotte nog een stap toevoegen aan de luister taak. Op het scherm wordt ook een klok getoond. Deze wijzer van de klok gaat op een bepaald moment ook ronddraaien, ook nadat je op de HEEN of WEG knop hebt gedrukt. Het is de bedoeling dat je op deze klok aangeeft wanneer je op de HEEN of WEG knop drukte om te helpen of niet. De roterende klok wordt in beeld gebracht voordat je “Kies” en de pieptoon hoort.

        Daarna druk je op de HEEN knop (= helpen),

        of druk je op de WEG knop (= niet helpen).

        Je komt pas “in actie” als je een pieptoon hebt gehoord.
        Focus op de roterende klok en onthoud waar de wijzer stond wanneer je op de knop drukte.

        De wijzers van de klok draaien nog even door. Na een tijdje verdwijnt de wijzer en daarna geef je op het nummerbord met je rechterhand aan wanneer je op de HEEN of WEG knop drukte.

        We gaan dit eerst een paar keer oefenen.
    KeyboardComponent next_press_11
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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    TextboxComponent next_text_11
      autoLog = False
      bold = False
      borderColor = black
      color = black
      editable = False
      letterHeight = 0.02
      padding = 0.01
      pos = (.45, -0.4)
      saveStartStop = False
      size = (.2,.08)
      startVal [time (s)] = 0.0
      text = druk op “enter” om naar het scenario te luisteren
      units = height
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  Routine info1
    CodeComponent text_init
      Code Type = Py
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      Begin Experiment:
        # create some variables used in event listeners
        keys = ['up','down']
        judge_keys_correct = ['0', '1', '2', '3', '4', '5', '6', '7', '8', '9'] # allowed keys for M judgement
        mouse = event.Mouse(visible=False,win=win)
        was_incorrect = False

        question = visual.TextBox2(win=win, text= "Waar was de wijzer van de klok toen je de toetsen indrukte?", # the critical question for the M judgement
                                     pos=(0, .4),
                                     size=(.4,.1), color = 'black', borderColor = 'black', units = 'height')

        pre_hint = visual.TextBox2(win=win, text= "door in het tekstveld een getal van 0 tot 59 in te voeren op het nummerbord met je rechterhand.", # before training 3 trials
                                     pos=(0, .4),
                                     size=(.4,.1), color = 'black', borderColor = 'black', units = 'height')

        judgement_box = visual.TextBox2(win=win, text = "", # create editable textbox in which participants can input the M judgement
                                     pos=(0, -0.4),
                                     size=(.2,.1), color = 'black', borderColor = 'black', units = 'height', editable = True, alignment='center')

        hint_box = visual.TextBox2(win=win, text = "voer een getal in tussen 0 en 59:", # tooltip for the M judgement
                                     pos=(0, -0.33),
                                     size=(.4,.1), color = 'black', borderColor = 'none', units = 'height')


        next_text_2 = visual.TextBox2(win=win, text = "druk op 'enter' om door te gaan", # tooltip to press "enter" to move to next routine"
                                     pos=(.45, -0.4),
                                     size=(.2,.08), color = 'black', borderColor = 'black', units = 'height', alignment='center')


        incorrect = visual.TextBox2(win=win, text= "Je drukte op de verkeerde toets. Druk op de toets die overeenkomt met de mededeling.", # gives feedback about wrong key pressed in forced trials
                                     pos=(.15, 0),
                                     size=(1,1), color = 'black', borderColor = 'none', units = 'height', letterHeight = .025)
    CodeComponent sounds_init
      Code Type = Py
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      Begin Experiment:
        # initialises sounds used in most trials
        buffer = 0.75 # delay between the playing of a soundfile and the next sound to be played.
        # Critical to avoid audio overlap

        beep = sound.Sound(value='A', secs=0.2, # beep sound to indicate that a keypress is now possible
            loops = 0,
            volume = 1)

        kies = sound.Sound("stimuli/kies.ogg", # action word: here participants can choose to help or not
            stopTime = 1,
            loops = 0,
            volume = 1)

        heen = sound.Sound("stimuli/heen.ogg", # action word: here participants should help
            stopTime = 1,
            loops = 0,
            volume = 1)

        weg = sound.Sound("stimuli/weg.ogg", # action word: here participants should not help
            stopTime = 1,
            loops = 0,
            volume = 1)
    CodeComponent shuffle_init
      Code Type = Py
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      Before Experiment:
        # this component aids with the randomisation of forced trials.
        # 50% of forced trials should be "heen" trials and 50% "weg" trials.

        training_4_n = 4 # amount of trials per conditions file
        forced_n = 48

        # create a balanced list:
        training_4_action_word = [0, 1] * (training_4_n//2)

        forced_action_word = [0, 1] * (forced_n//2)

        # randomise list order:
        shuffle(training_4_action_word)

        shuffle(forced_action_word)
    CodeComponent clock_init
      Code Type = Py
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      Before Experiment:
        # imports needed libraries, some of this might be redundant
        from math import *
        from psychopy import gui
        import random
      Begin Experiment:
        # create a circle for the clock face
        clock_circle = visual.Circle(
            win = win,
            radius = 280,
            edges = 100,
            lineColor = "black",
            lineWidth = 5,
            interpolate = True
        )

        # create center dot
        center_dot = visual.Circle(
            win = win,
            radius = 6,
            edges = 512,
            lineColor = "black",
            fillColor = "black",
            interpolate = True
        )

        # create clock hand
        second_hand = visual.Line(
            win = win,
            start = (0, 0),
            end = (0, 265),
            lineColor = "black",
            lineWidth = 5,
            ori = 0
        )
        # create clock details
        ticks_large = []
        ticks_small = []
        clock_labels = []
        for i in range(12):
            ticks_a = visual.Line(win, start=(clock_circle.radius*cos(2*pi/12*i),
            clock_circle.radius*sin(2*pi/12*i)),
            end=((clock_circle.radius+20)*cos(2*pi/12*i),
            (clock_circle.radius+20)*sin(2*pi/12*i)), # the "-20" offsets the label so that they don't overlap with the circle
            lineColor = "black",
            lineWidth = 3
            )
            ticks_large.append(ticks_a)

        # create  labels
            labels = visual.TextStim(
                win = win,
                pos = [clock_circle.pos[0] + ((clock_circle.radius + 40) * cos(radians(-(270+i*30)))), # the "+20" offsets the label so that they don't overlap with the circle
                clock_circle.pos[0] + ((clock_circle.radius + 40) * sin(radians(-(270+i*30))))],
                text = str(i*5),
                color = "black"
            )
            clock_labels.append(labels)


        def clock_static(): # function for drawing the static clock without animation
            clock_circle.draw()
            center_dot.draw()
            for labels in clock_labels:
                labels.draw()
            for ticks_a in ticks_large:
                ticks_a.draw()

        def clock_full(): # function for drawing animated clock
            clock_static()
            second_hand.setOri(timer.getTime() * (360 / 2.56) % 360)
            second_hand.draw()

        def clock_judgement(): # function for drawing M judgement screen elements
            clock_static()
            judgement_box.draw()
            next_text_2.draw()
            question.draw()
            hint_box.draw()
    KeyboardComponent next_press
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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    TextboxComponent next_text
      autoLog = False
      bold = False
      borderColor = black
      color = black
      editable = False
      letterHeight = 0.02
      padding = 0.01
      pos = (.45, -0.4)
      saveStartStop = False
      size = (.2,.08)
      startVal [time (s)] = 0.0
      text = druk op "enter" om akkoord te gaan
      units = height
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    TextboxComponent info1_text
      autoLog = False
      bold = False
      color = black
      editable = False
      letterHeight = 0.025
      padding = 0.1
      saveStartStop = False
      size = (0.95, 0.95)
      startVal [time (s)] = 0.0
      units = height
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      text:
        Informatiebrief voor deelnemers

        Helpende handen studie

        Geachte deelnemer,

        Je heeft interesse getoond in deelname aan mijn studie over gedrag in ongewone situaties. Op deze pagina vindt je een overzicht van de studie waaraan je wordt uitgenodigd deel te nemen. Lees deze informatie zorgvuldig door voordat je toestemming geeft voor deelname aan deze studie. Voordat je kunt deelnemen aan wetenschappelijk onderzoek is een verklaring vereist waarin je verklaart dat je volledig geïnformeerd bent en bereid bent om deel te nemen. Dit wordt geïnformeerde toestemming genoemd.

        Onderwerp en doel van de studie

        Dit onderzoek is onderdeel van de masterscriptie van Sören Michallek, research master student Social and Health Psychology aan de Universiteit Utrecht. Voor zijn afstudeerproject onderzoekt hij hoe mensen zich gedragen in ongewone situaties.
  Routine info2
    TextboxComponent info2_text
      autoLog = False
      bold = False
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.025
      padding = 0.1
      saveStartStop = False
      size = (.95, .95)
      startVal [time (s)] = 0.0
      units = height
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      text:
        Inhoud en opzet van het experiment

        Tijdens dit onderzoek luisteren de deelnemers naar beschrijvingen van verschillende scenario's. Vervolgens wordt de deelnemers gevraagd bepaalde beslissingen te nemen.

        Vertrouwelijkheid en toegang door derden

        Dit onderzoek is een project van de Universiteit Utrecht. De in dit onderzoek verzamelde gegevens zijn uitsluitend bestemd voor wetenschappelijk onderzoek. De gegevens worden gecontroleerd door de Universiteit Utrecht volgens de General Data Protection Regulation (GDPR). Anonieme gegevens uit dit onderzoek kunnen worden gedeeld in een openbare repository voor onderzoeksdoeleinden en worden gepresenteerd in wetenschappelijke publicaties. Je heeft het recht om het onderzoek op elk moment te beëindigen en je kunt ons binnen 24 uur na indiening laten weten uw gegevens te verwijderen.
    KeyboardComponent next_press_2
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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    TextboxComponent next_text_2
      autoLog = False
      bold = False
      borderColor = black
      color = black
      editable = False
      letterHeight = 0.02
      padding = 0.01
      pos = (.45, -0.4)
      saveStartStop = False
      size = (.2,.08)
      startVal [time (s)] = 0.0
      text = druk op "enter" om akkoord te gaan
      units = height
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  Routine info3
    TextboxComponent info3_text
      autoLog = False
      bold = False
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.025
      padding = 0.1
      saveStartStop = False
      size = (.95, .95)
      startVal [time (s)] = 0.0
      units = height
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      text:
        Deelname aan de studie

        Deelname aan dit onderzoek is geheel vrijwillig. Je hebt het recht om helemaal niet deel te nemen of om het onderzoek op elk moment zonder opgaaf van reden te verlaten. Zelfs als je de geïnformeerde toestemming nu ondertekent, kunt je zich op elk moment terugtrekken. Het verlaten van de studie heeft op geen enkel moment gevolgen.
    KeyboardComponent next_press_3
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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    TextboxComponent next_text_3
      autoLog = False
      bold = False
      borderColor = black
      color = black
      editable = False
      letterHeight = 0.02
      padding = 0.01
      pos = (.45, -0.4)
      saveStartStop = False
      size = (.2,.08)
      startVal [time (s)] = 0.0
      text = druk op "enter" om akkoord te gaan
      units = height
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  Routine info4
    TextboxComponent info4_text
      autoLog = False
      bold = False
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.025
      padding = 0.1
      saveStartStop = False
      size = (.95, .95)
      startVal [time (s)] = 0.0
      units = height
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      text:
        Administratieve zaken

        De internationale richtlijnen die op dit onderzoek van toepassing zijn, worden zorgvuldig nageleefd.
        Als je bereid bent deel te nemen aan dit onderzoek, vragen wij op "enter" te drukken om je toestemming te geven. Mocht je op een later tijdstip nog vragen hebben met betrekking tot dit onderzoek, neemt je dan gerust contact op met de studentonderzoeker of de facultaire begeleider via onderstaande contactgegevens.

        Met vriendelijke groet,

        Sören Michallek (s.michallek@students.uu.nl)
        Masterstudent Sociale en Gezondheidspsychologie - Universiteit Utrecht
        Hans Marien (h.marien@uu.nl)

        Begeleider scriptieproject - Universitair Hoofddocent - Universiteit Utrecht
        Henk Aarts (h.aarts@uu.nl)
        Begeleider afstudeerproject - Hoogleraar - Universiteit Utrecht
    KeyboardComponent next_press_4
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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    TextboxComponent next_text_4
      autoLog = False
      bold = False
      borderColor = black
      color = black
      editable = False
      letterHeight = 0.02
      padding = 0.01
      pos = (.45, -0.4)
      saveStartStop = False
      size = (.2,.08)
      startVal [time (s)] = 0.0
      text = druk op "enter" om akkoord te gaan
      units = height
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  Routine instr_free
    TextboxComponent instr_free_text_5
      autoLog = False
      bold = False
      borderWidth = .05
      color = black
      editable = False
      letterHeight = 0.025
      padding = 0.1
      saveStartStop = False
      size = (0.95, 0.95)
      startVal [time (s)] = 0.0
      units = height
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      text:
        We beginnen nu met het eerste deel van het onderzoek. Dit deel gaat over wat je in verschillende situaties zelf wilt doen. Wat je zou willen doen kan best per situatie en moment verschillen. Probeer iedere keer op je gevoel af te gaan wat je wilt doen.

        Je geeft aan wat je wilt doen door op de HEEN of WEG knop te drukken.

        Daarna geef je op het nummerbord met je rechterhand aan wanneer je op de HEEN of WEG knop drukte.
    KeyboardComponent next_press_12
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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    TextboxComponent next_text_12
      autoLog = False
      bold = False
      borderColor = black
      color = black
      editable = False
      letterHeight = 0.02
      padding = 0.01
      pos = (.45, -0.4)
      saveStartStop = False
      size = (.2,.08)
      startVal [time (s)] = 0.0
      text = druk op “enter” om naar het scenario te luisteren
      units = height
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  Routine free_trial
    CodeComponent free_code
      Code Type = Py
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      Begin Routine:
        # create some init variables
        objective_time = []
        revolutions = []
        delay = random.uniform(1.28, 2.56)

        timer = clock.Clock()
        # define trial sound
        free_sound = sound.Sound(soundpath_free,
            startTime = 0,
            stopTime = duration_free + buffer,
            loops = 0,
            volume = 1)

        dur_free = duration_free + buffer # prevents audio overlap

        free_sound.play() # animate clock and play scenario soundfile

        while timer.getTime() <= (dur_free):
            clock_full()
            win.flip()

        free_sound.stop()
        kies.play() # animate clock and play action word
        while timer.getTime() >= (dur_free) and timer.getTime() <= (dur_free+0.843):
            clock_full()
            win.flip()

        kies.stop()

        while timer.getTime() >= (dur_free+0.843) and timer.getTime() <= (dur_free+1.043): # animate clock and play beep
            clock_full()
            win.flip()

        beep.play()
        response_free = event.getKeys(keyList = keys)

        while True:
            response_free = event.getKeys(keyList = keys)
            if len(response_free)>0:
                objective_time.append(timer.getTime()-(dur_free+1.043)) # store the objective timing
                free_trials.addData('objective', objective_time)
                free_trials.addData('judgement', response_free) # store M judgement
                break
            clock_full()
            win.flip()

        delay_clock = clock.Clock()
        while delay_clock.getTime() <= delay: # see above
            clock_full()
            win.flip()

        continueRoutine = False
  Routine w
    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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  Routine training_2_instructions_3
    KeyboardComponent next_press_14
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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    TextboxComponent next_text_14
      autoLog = False
      bold = False
      borderColor = black
      color = black
      editable = False
      letterHeight = 0.02
      padding = 0.01
      pos = (.45, -0.4)
      saveStartStop = False
      size = (.2,.08)
      startVal [time (s)] = 0.0
      text = druk op “enter” om naar het scenario te luisteren
      units = height
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    TextboxComponent training_2_instructions_3_text
      autoLog = False
      bold = False
      borderWidth = .05
      color = black
      editable = False
      letterHeight = 0.025
      padding = 0.1
      saveStartStop = False
      size = (0.95, 0.95)
      startVal [time (s)] = 0.0
      units = height
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      text:
        Je gaat nu weer luisteren naar een situatie. Luister er aandachtig naar.

        Probeer je in de situatie in te leven alsof je er zelf aanwezig bent.

        Daarna vragen we wat je kiest om te doen: helpen of niet helpen?

        Dus na iedere situatie hoor je het woord “Kies” gevolgd door een pieptoon. Je komt pas “in actie” als je een pieptoon hebt gehoord. Je kiest dan HEEN of WEG en drukt dan op de bijbehorende knop.

        HEEN {pijl omhoog} staat dus voor: er heen gaan en helpen

        WEG {pijl omlaag} staat voor weggaan en niet helpen.
  Routine instr_forced
    TextboxComponent instr_forced_text
      autoLog = False
      bold = False
      borderWidth = .05
      color = black
      editable = False
      letterHeight = 0.025
      padding = 0.1
      saveStartStop = False
      size = (0.95, 0.95)
      startVal [time (s)] = 0.0
      text = Je bent nu klaar met oefenen. Nu gaan we verder met de scenario’s. Dus nogmaals: Volg altijd de gesproken aanwijzingen op na het horen van de pieptoon.
      units = height
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    TextboxComponent next_text_15
      autoLog = False
      bold = False
      borderColor = black
      color = black
      editable = False
      letterHeight = 0.02
      padding = 0.01
      pos = (.45, -0.4)
      saveStartStop = False
      size = (.2,.08)
      startVal [time (s)] = 0.0
      text = druk op “enter” om naar het scenario te luisteren
      units = height
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    KeyboardComponent next_press_15
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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  Routine training_4_instructions
    TextboxComponent training_4_text
      autoLog = False
      bold = False
      borderWidth = .05
      color = black
      editable = False
      letterHeight = 0.025
      padding = 0.1
      saveStartStop = False
      size = (0.95, 0.95)
      startVal [time (s)] = 0.0
      units = height
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      text:
         In het eerste deel was je vrij om te beslissen of je wilde helpen of niet, nadat je het woord “kies” hoorde. In het tweede deel kan je niet meer zelf beslissen wat je doet. Je krijgt dan het woord “heen” of “weg” te horen en na de pieptoon moet je dan op de overeenkomstige pijltjestoets drukken. Volg altijd de gesproken aanwijzingen op na het horen van de pieptoon.

        We gaan dit eerst een paar keer oefenen.
    TextboxComponent next_text_13
      autoLog = False
      bold = False
      borderColor = black
      color = black
      editable = False
      letterHeight = 0.02
      padding = 0.01
      pos = (.45, -0.4)
      saveStartStop = False
      size = (.2,.08)
      startVal [time (s)] = 0.0
      text = druk op “enter” om naar het scenario te luisteren
      units = height
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    KeyboardComponent next_press_13
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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  Routine training_3_trial_1
    CodeComponent training_3_trial_1_code
      Code Type = Py
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      Begin Routine:
        # create some init variables
        objective_time = []
        revolutions = []
        delay = random.uniform(1.28, 2.56)

        timer = clock.Clock()
        # define trial sound
        t3_sound = sound.Sound(soundpath_t3,
            startTime = 0,
            stopTime = duration_t3 + buffer,
            loops = 0,
            volume = 1)

        dur_t3 = duration_t3 + buffer # prevents audio overlap

        t3_sound.play() # animate clock and play scenario soundfile

        while timer.getTime() <= (dur_t3):
            clock_full()
            win.flip()

        t3_sound.stop()
        kies.play() # animate clock and play action word
        while timer.getTime() >= (dur_t3) and timer.getTime() <= (dur_t3+0.843):
            clock_full()
            win.flip()

        kies.stop()

        while timer.getTime() >= (dur_t3+0.843) and timer.getTime() <= (dur_t3+1.043): # animate clock and play beep
            clock_full()
            win.flip()

        beep.play()
        response_t3 = event.getKeys(keyList = keys)

        while True:
            response_t3 = event.getKeys(keyList = keys)
            if len(response_t3)>0:
                objective_time.append(timer.getTime()-(dur_t3+1.043)) # store the objective timing
                training_3_trials.addData('objective', objective_time)
                training_3_trials.addData('judgement', response_t3) # store M judgement
                break
            clock_full()
            win.flip()

        delay_clock = clock.Clock()
        while delay_clock.getTime() <= delay: # see above
            clock_full()
            win.flip()

        continueRoutine = False
  Routine training_3_trial_2
    TextComponent t3_text
      color = black
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $resp_display
      units = height
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    KeyboardComponent keyResp
      allowedKeys = 'return','backspace','0','1','2','3','4','5','6','7','8','9','num_0','num_1','num_2','num_3','num_4','num_5','num_6','num_7','num_8','num_9'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0
      store = all keys
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    CodeComponent training_3_trial_2_code
      Code Type = Py
      Begin Routine:
        #clock_static()
        resp_display = ""
        maxDigits = 2

        #key logger defaults
        last_len = 0
        key_list = []
        # draw all required objects
        next_text_2.setAutoDraw(True)
        question.setAutoDraw(True)
        hint_box.setAutoDraw(True)
        clock_circle.setAutoDraw(True)
        center_dot.setAutoDraw(True)
        for labels in clock_labels:
            labels.setAutoDraw(True)
        for ticks_a in ticks_large:
            ticks_a.setAutoDraw(True)
        win.flip()
      Each Frame:
        #if a new key has been pressed since last time
        if(len(keyResp.keys) > last_len):

            #increment the key logger length
            last_len = len(keyResp.keys)

            #grab the last key added to the keys list
            key_list.append(keyResp.keys.pop())

            #check for backspace
            if("backspace" in key_list):
                key_list.remove("backspace")

                #if we have at least 1 character, remove it
                if(len(key_list) > 0):
                    key_list.pop()

            #if enter is pressed then...
            elif("return" in key_list):
                #remove the enter key
                key_list.pop()

                #and end the trial if we have at least 2 digits
                if(len(key_list) >= 1):
                    continueRoutine = False


            #now loop through and remove any extra characters that may exist
            while(len(key_list) > maxDigits):
                key_list.pop()

            #create a variable to display
            key_list = [keys.replace('num_', '') for keys in key_list]
            resp_display = ''.join(key_list)
      End Routine:
        training_3_trials.addData('subj_rating', key_list)

        next_text_2.setAutoDraw(False)
        question.setAutoDraw(False)
        hint_box.setAutoDraw(False)
        clock_circle.setAutoDraw(False)
        center_dot.setAutoDraw(False)
        for labels in clock_labels:
            labels.setAutoDraw(False)
        for ticks_a in ticks_large:
            ticks_a.setAutoDraw(False)

        win.flip()
    TextboxComponent t3_border
      autoLog = False
      bold = False
      borderColor = black
      color = none
      editable = False
      letterHeight = 0.05
      pos = (0, -.4)
      saveStartStop = False
      size = (.2, .1)
      startVal [time (s)] = 0.0
      units = height
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  Routine forced_trial_1
    CodeComponent clock_forced
      Code Type = Py
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      Begin Routine:
        # create some init variables
        objective_time = []
        revolutions = []
        current_action_word = forced_action_word.pop()
        forced_trials.addData('action_word', current_action_word)
        delay = random.uniform(1.28, 2.56)

        timer = clock.Clock()
        # define trial sound
        forced_sound = sound.Sound(soundpath_forced,
            startTime = 0,
            stopTime = duration_forced + buffer,
            loops = 0,
            volume = 1)

        dur_forced = duration_forced + buffer # prevents audio overlap

        forced_sound.play() # animate clock and play scenario soundfile

        while timer.getTime() <= (dur_forced):
            clock_full()
            win.flip()

        forced_sound.stop()

        if current_action_word == 0: # choose action word
            heen.play()
        elif current_action_word == 1:
            weg.play()
        while timer.getTime() >= (dur_forced) and timer.getTime() <= (dur_forced+0.843):
            clock_full()
            win.flip()

        if current_action_word == 0: # stop action word depending on which one it is
            heen.stop()
        elif current_action_word == 1:
            weg.stop()

        while timer.getTime() >= (dur_forced+0.843) and timer.getTime() <= (dur_forced+1.043): # animate clock and play beep
            clock_full()
            win.flip()

        beep.play()
        response_forced = event.getKeys(keyList = keys)

        while True:
            response_forced = event.getKeys(keyList = keys)
            if len(response_forced)>0:
                if response_forced[0] == 'up' and current_action_word == 0: # correct reponse for help action word
                    objective_time.append(timer.getTime()-(dur_forced+1.043)) # store the objective timing
                    forced_trials.addData('objective', objective_time)
                    forced_trials.addData('judgement', response_forced) # store M judgement
                    forced_trials.addData('was_incorrect', was_incorrect) # default is False
                    break
                elif response_forced[0] == 'up' and current_action_word == 1: # wrong reponse for non-help action word
                    objective_time.append(timer.getTime()-(dur_forced+1.043))
                    forced_trials.addData('objective', objective_time)
                    forced_trials.addData('judgement', response_forced)
                    was_incorrect = True
                    forced_trials.addData('was_incorrect', was_incorrect)
                    break
                elif response_forced[0] == 'down' and current_action_word == 0: # wrong reponse for help action word
                    objective_time.append(timer.getTime()-(dur_forced+1.043))
                    forced_trials.addData('objective', objective_time)
                    forced_trials.addData('judgement', response_forced)
                    was_incorrect = True
                    forced_trials.addData('was_incorrect', was_incorrect)
                    break
                elif response_forced[0] == 'down' and current_action_word == 1: # correct reponse for non-help action word
                    objective_time.append(timer.getTime()-(dur_forced+1.043))
                    forced_trials.addData('objective', objective_time)
                    forced_trials.addData('judgement', response_forced)
                    forced_trials.addData('was_incorrect', was_incorrect)
                    break
            clock_full()
            win.flip()

        delay_clock = clock.Clock()
        while delay_clock.getTime() <= delay: # see above
            clock_full()
            win.flip()

        win.flip()
        core.wait(0.5)
        continueRoutine = False
  Routine forced_trial_incorrect
    CodeComponent incorrect_code
      Code Type = Py
      Begin Routine:
        if was_incorrect == True:
            incorrect.draw()
            win.flip()
            core.wait(3)
            continueRoutine = False
  Routine forced_trial_2
    TextComponent forced_2_text
      color = black
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $resp_display
      units = height
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    KeyboardComponent keyResp_2
      allowedKeys = 'return','backspace','0','1','2','3','4','5','6','7','8','9','num_0','num_1','num_2','num_3','num_4','num_5','num_6','num_7','num_8','num_9'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0
      store = all keys
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    CodeComponent forced_2_code
      Code Type = Py
      Begin Routine:
        if was_incorrect == True:
            continueRoutine = False

        #clock_static()
        resp_display = ""
        maxDigits = 2

        #key logger defaults
        last_len = 0
        key_list = []
        # draw all required objects
        next_text_2.setAutoDraw(True)
        question.setAutoDraw(True)
        hint_box.setAutoDraw(True)
        clock_circle.setAutoDraw(True)
        center_dot.setAutoDraw(True)
        for labels in clock_labels:
            labels.setAutoDraw(True)
        for ticks_a in ticks_large:
            ticks_a.setAutoDraw(True)
        win.flip()
      Each Frame:
        #if a new key has been pressed since last time
        if(len(keyResp_2.keys) > last_len):

            #increment the key logger length
            last_len = len(keyResp_2.keys)

            #grab the last key added to the keys list
            key_list.append(keyResp_2.keys.pop())

            #check for backspace
            if("backspace" in key_list):
                key_list.remove("backspace")

                #if we have at least 1 character, remove it
                if(len(key_list) > 0):
                    key_list.pop()

            #if enter is pressed then...
            elif("return" in key_list):
                #remove the enter key
                key_list.pop()

                #and end the trial if we have at least 2 digits
                if(len(key_list) >= 1):
                    continueRoutine = False


            #now loop through and remove any extra characters that may exist
            while(len(key_list) > maxDigits):
                key_list.pop()

            #create a variable to display
            key_list = [keys.replace('num_', '') for keys in key_list]
            resp_display = ''.join(key_list)
      End Routine:
        training_3_trials.addData('subj_rating', key_list)

        # reset some variables and attributes to default for the next trial(s)
        was_incorrect = False
        next_text_2.setAutoDraw(False)
        question.setAutoDraw(False)
        hint_box.setAutoDraw(False)
        clock_circle.setAutoDraw(False)
        center_dot.setAutoDraw(False)
        for labels in clock_labels:
            labels.setAutoDraw(False)
        for ticks_a in ticks_large:
            ticks_a.setAutoDraw(False)

        win.flip()
        core.wait(0.1)
        win.flip()
    TextboxComponent forced_2_border
      autoLog = False
      bold = False
      borderColor = black
      color = none
      editable = False
      letterHeight = 0.05
      pos = (0, -.4)
      saveStartStop = False
      size = (.2, .1)
      startVal [time (s)] = 0.0
      units = height
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  Routine t4_incorrect
    CodeComponent t4_inc_code
      Code Type = Py
      Begin Routine:
        if was_incorrect == True:
            incorrect.draw()
            win.flip()
            core.wait(3)
            continueRoutine = False
  Routine t4_trial_2
    TextComponent t4_2_text
      color = black
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $resp_display
      units = height
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    KeyboardComponent keyResp_3
      allowedKeys = 'return','backspace','0','1','2','3','4','5','6','7','8','9','num_0','num_1','num_2','num_3','num_4','num_5','num_6','num_7','num_8','num_9'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0
      store = all keys
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    CodeComponent t4_2_code
      Code Type = Py
      Begin Routine:
        if was_incorrect == True:
            win.flip()
            core.wait(0.5)
            continueRoutine = False
        #clock_static()
        resp_display = ""
        maxDigits = 2

        #key logger defaults
        last_len = 0
        key_list = []
        # draw all required objects
        next_text_2.setAutoDraw(True)
        question.setAutoDraw(True)
        hint_box.setAutoDraw(True)
        clock_circle.setAutoDraw(True)
        center_dot.setAutoDraw(True)
        for labels in clock_labels:
            labels.setAutoDraw(True)
        for ticks_a in ticks_large:
            ticks_a.setAutoDraw(True)
        win.flip()
      Each Frame:
        #if a new key has been pressed since last time
        if(len(keyResp_3.keys) > last_len):

            #increment the key logger length
            last_len = len(keyResp_3.keys)

            #grab the last key added to the keys list
            key_list.append(keyResp_3.keys.pop())

            #check for backspace
            if("backspace" in key_list):
                key_list.remove("backspace")

                #if we have at least 1 character, remove it
                if(len(key_list) > 0):
                    key_list.pop()

            #if enter is pressed then...
            elif("return" in key_list):
                #remove the enter key
                key_list.pop()

                #and end the trial if we have at least 2 digits
                if(len(key_list) >= 1):
                    continueRoutine = False


            #now loop through and remove any extra characters that may exist
            while(len(key_list) > maxDigits):
                key_list.pop()

            #create a variable to display
            key_list = [keys.replace('num_', '') for keys in key_list]
            resp_display = ''.join(key_list)
      End Routine:
        training_3_trials.addData('subj_rating', key_list)

        # reset some variables and attributes to default for the next trial(s)

        was_incorrect = False
        next_text_2.setAutoDraw(False)
        question.setAutoDraw(False)
        hint_box.setAutoDraw(False)
        clock_circle.setAutoDraw(False)
        center_dot.setAutoDraw(False)
        for labels in clock_labels:
            labels.setAutoDraw(False)
        for ticks_a in ticks_large:
            ticks_a.setAutoDraw(False)

        win.flip()
    TextboxComponent t4_border
      autoLog = False
      bold = False
      borderColor = black
      color = none
      editable = False
      letterHeight = 0.05
      pos = (0, -.4)
      saveStartStop = False
      size = (.2, .1)
      startVal [time (s)] = 0.0
      units = height
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  Routine training_4
    CodeComponent t4_clock
      Code Type = Py
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      Begin Routine:
        # create some init variables
        objective_time = []
        revolutions = []
        current_action_word = training_4_action_word.pop()
        training_4_trials.addData('action_word', current_action_word)
        delay = random.uniform(1.28, 2.56)

        timer = clock.Clock()
        # define trial sound
        t4_sound = sound.Sound(soundpath_t4,
            startTime = 0,
            stopTime = duration_t4 + buffer,
            loops = 0,
            volume = 1)

        dur_t4 = duration_t4 + buffer # prevents audio overlap

        t4_sound.play() # animate clock and play scenario soundfile

        while timer.getTime() <= (dur_t4):
            clock_full()
            win.flip()

        t4_sound.stop()

        if current_action_word == 0: # choose action word
            heen.play()
        elif current_action_word == 1:
            weg.play()
        while timer.getTime() >= (dur_t4) and timer.getTime() <= (dur_t4+0.843):
            clock_full()
            win.flip()

        if current_action_word == 0: # stop action word depending on which one it is
            heen.stop()
        elif current_action_word == 1:
            weg.stop()

        while timer.getTime() >= (dur_t4+0.843) and timer.getTime() <= (dur_t4+1.043): # animate clock and play beep
            clock_full()
            win.flip()

        beep.play()
        response_t4 = event.getKeys(keyList = keys)

        while True:
            response_t4 = event.getKeys(keyList = keys)
            if len(response_t4)>0:
                if response_t4[0] == 'up' and current_action_word == 0: # correct reponse for help action word
                    objective_time.append(timer.getTime()-(dur_t4+1.043)) # store the objective timing
                    training_4_trials.addData('objective', objective_time)
                    training_4_trials.addData('judgement', response_t4) # store M judgement
                    training_4_trials.addData('was_incorrect', was_incorrect) # default is False
                    break
                elif response_t4[0] == 'up' and current_action_word == 1: # wrong reponse for non-help action word
                    objective_time.append(timer.getTime()-(dur_t4+1.043))
                    training_4_trials.addData('objective', objective_time)
                    training_4_trials.addData('judgement', response_t4)
                    was_incorrect = True
                    training_4_trials.addData('was_incorrect', was_incorrect)
                    break
                elif response_t4[0] == 'down' and current_action_word == 0: # wrong reponse for help action word
                    objective_time.append(timer.getTime()-(dur_t4+1.043))
                    training_4_trials.addData('objective', objective_time)
                    training_4_trials.addData('judgement', response_t4)
                    was_incorrect = True
                    training_4_trials.addData('was_incorrect', was_incorrect)
                    break
                elif response_t4[0] == 'down' and current_action_word == 1: # correct reponse for non-help action word
                    objective_time.append(timer.getTime()-(dur_t4+1.043))
                    training_4_trials.addData('objective', objective_time)
                    training_4_trials.addData('judgement', response_t4)
                    training_4_trials.addData('was_incorrect', was_incorrect)
                    break
            clock_full()
            win.flip()

        delay_clock = clock.Clock()
        while delay_clock.getTime() <= delay: # see above
            clock_full()
            win.flip()

        continueRoutine = False
  Routine free_trial_2
    TextComponent free_text
      color = black
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $resp_display
      units = height
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    KeyboardComponent keyResp_4
      allowedKeys = 'return','backspace','0','1','2','3','4','5','6','7','8','9','num_0','num_1','num_2','num_3','num_4','num_5','num_6','num_7','num_8','num_9'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0
      store = all keys
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    CodeComponent free_2_code
      Code Type = Py
      Begin Routine:
        #clock_static()
        resp_display = ""
        maxDigits = 2

        #key logger defaults
        last_len = 0
        key_list = []
        # draw all required objects
        next_text_2.setAutoDraw(True)
        question.setAutoDraw(True)
        hint_box.setAutoDraw(True)
        clock_circle.setAutoDraw(True)
        center_dot.setAutoDraw(True)
        for labels in clock_labels:
            labels.setAutoDraw(True)
        for ticks_a in ticks_large:
            ticks_a.setAutoDraw(True)
        win.flip()
      Each Frame:
        #if a new key has been pressed since last time
        if(len(keyResp_4.keys) > last_len):

            #increment the key logger length
            last_len = len(keyResp_4.keys)

            #grab the last key added to the keys list
            key_list.append(keyResp_4.keys.pop())

            #check for backspace
            if("backspace" in key_list):
                key_list.remove("backspace")

                #if we have at least 1 character, remove it
                if(len(key_list) > 0):
                    key_list.pop()

            #if enter is pressed then...
            elif("return" in key_list):
                #remove the enter key
                key_list.pop()

                #and end the trial if we have at least 2 digits
                if(len(key_list) >= 1):
                    continueRoutine = False


            #now loop through and remove any extra characters that may exist
            while(len(key_list) > maxDigits):
                key_list.pop()

            #create a variable to display
            key_list = [keys.replace('num_', '') for keys in key_list]
            resp_display = ''.join(key_list)
      End Routine:
        training_3_trials.addData('subj_rating', key_list)

        next_text_2.setAutoDraw(False)
        question.setAutoDraw(False)
        hint_box.setAutoDraw(False)
        clock_circle.setAutoDraw(False)
        center_dot.setAutoDraw(False)
        for labels in clock_labels:
            labels.setAutoDraw(False)
        for ticks_a in ticks_large:
            ticks_a.setAutoDraw(False)

        win.flip()
    TextboxComponent free_border
      autoLog = False
      bold = False
      borderColor = black
      color = none
      editable = False
      letterHeight = 0.05
      pos = (0, -.4)
      saveStartStop = False
      size = (.2, .1)
      startVal [time (s)] = 0.0
      units = height
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  Routine free_debrief
    TextboxComponent free_debrief_text
      autoLog = False
      bold = False
      borderWidth = .05
      color = black
      editable = False
      letterHeight = 0.025
      padding = 0.1
      saveStartStop = False
      size = (0.95, 0.95)
      startVal [time (s)] = 0.0
      text = Je bent nu klaar met het eerste deel van het onderzoek.
      units = height
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    TextboxComponent free_debrief_next_text
      autoLog = False
      bold = False
      borderColor = black
      color = black
      editable = False
      letterHeight = 0.02
      padding = 0.01
      pos = (.45, -0.4)
      saveStartStop = False
      size = (.2,.08)
      startVal [time (s)] = 0.0
      text = druk op "enter" om door te gaan
      units = height
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    KeyboardComponent next_press_16
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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  Routine pre_t3_instructions
    TextboxComponent pre_t3_instructions_text_1
      autoLog = False
      bold = False
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.025
      padding = 0.15
      saveStartStop = False
      size = (0.95, 0.95)
      startVal [time (s)] = 0.0
      text = Je gaat nu oefenen met er heen gaan en helpen.
      units = height
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    KeyboardComponent next_press_17
      allowedKeys = 'up'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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    TextboxComponent next_text_16
      autoLog = False
      bold = False
      borderColor = black
      color = black
      editable = False
      letterHeight = 0.02
      padding = 0.01
      pos = (.45, -0.4)
      saveStartStop = False
      size = (.2,.08)
      startVal [time (s)] = 0.0
      text = druk op “HEEN” 
      units = height
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  Routine pre_t3_instructions_2
    TextboxComponent pre_t3_instructions_text
      autoLog = False
      bold = False
      borderWidth = 0
      color = black
      editable = False
      letterHeight = 0.025
      padding = 0.15
      saveStartStop = False
      size = (0.95, 0.95)
      startVal [time (s)] = 0.0
      text = Je gaat nu oefenen met weggaan en niet helpen.
      units = height
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    KeyboardComponent next_press_18
      allowedKeys = 'down'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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    TextboxComponent next_text_17
      autoLog = False
      bold = False
      borderColor = black
      color = black
      editable = False
      letterHeight = 0.02
      padding = 0.01
      pos = (.45, -0.4)
      saveStartStop = False
      size = (.2,.08)
      startVal [time (s)] = 0.0
      text = druk op “WEG”
      units = height
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  Routine pre_t3_judgement
    TextComponent free_text_2
      color = black
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $resp_display
      units = height
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    KeyboardComponent keyResp_5
      allowedKeys = 'return','backspace','0','1','2','3','4','5','6','7','8','9','num_0','num_1','num_2','num_3','num_4','num_5','num_6','num_7','num_8','num_9'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0
      store = all keys
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    CodeComponent pre_t3_judgement_code
      Code Type = Py
      Begin Routine:
        #clock_static()
        resp_display = ""
        maxDigits = 2

        #key logger defaults
        last_len = 0
        key_list = []
        # draw all required objects
        next_text_2.setAutoDraw(True)
        pre_hint.setAutoDraw(True)
        clock_circle.setAutoDraw(True)
        center_dot.setAutoDraw(True)
        for labels in clock_labels:
            labels.setAutoDraw(True)
        for ticks_a in ticks_large:
            ticks_a.setAutoDraw(True)
        win.flip()
      Each Frame:
        #if a new key has been pressed since last time
        if(len(keyResp_5.keys) > last_len):

            #increment the key logger length
            last_len = len(keyResp_5.keys)

            #grab the last key added to the keys list
            key_list.append(keyResp_5.keys.pop())

            #check for backspace
            if("backspace" in key_list):
                key_list.remove("backspace")

                #if we have at least 1 character, remove it
                if(len(key_list) > 0):
                    key_list.pop()

            #if enter is pressed then...
            elif("return" in key_list):
                #remove the enter key
                key_list.pop()

                #and end the trial if we have at least 2 digits
                if(len(key_list) >= 1):
                    continueRoutine = False


            #now loop through and remove any extra characters that may exist
            while(len(key_list) > maxDigits):
                key_list.pop()

            #create a variable to display
            key_list = [keys.replace('num_', '') for keys in key_list]
            resp_display = ''.join(key_list)
      End Routine:
        #training_3_trials.addData('subj_rating', key_list)

        next_text_2.setAutoDraw(False)
        pre_hint.setAutoDraw(False)
        clock_circle.setAutoDraw(False)
        center_dot.setAutoDraw(False)
        for labels in clock_labels:
            labels.setAutoDraw(False)
        for ticks_a in ticks_large:
            ticks_a.setAutoDraw(False)

        win.flip()
    TextboxComponent pre_t3_border
      autoLog = False
      bold = False
      borderColor = black
      color = none
      editable = False
      letterHeight = 0.05
      pos = (0, -.4)
      saveStartStop = False
      size = (.2, .1)
      startVal [time (s)] = 0.0
      units = height
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  Routine hide_mouse
    CodeComponent hide_mouse_code
      Code Type = Py
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      Begin Routine:
        win.mouseVisible = True
      End Routine:
        win.mouseVisible = False # hides the mouse, did not find another way to make this work.
  Routine check_likert
    CodeComponent check_likert_code
      Code Type = Py
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      Begin Experiment:
        # Likert questions to check whether participants can empathize well with the scenarios, can hear them well, and whether they believed someone was in need of help or not
        labels_2 = ['1', '2', '3', '4', '5']

        check_1 = visual.RatingScale( # 1-5 Likert
            win, low = 1, high = 5,
            markerStart = 12, markerColor = 'Black', textSize = .6, textColor = 'Black', lineColor = 'Black', showAccept = False, mouseOnly = True,
            pos=(0,300), size= 1, marker = 'circle', textFont = 'Open Sans', labels = labels_2,
            acceptKeys = 'b', scale = '1 = helemaal niet gevaarlijk                    5 = heel erg gevaarlijk')

        check_2 = visual.RatingScale( # 1-5 Likert
            win, low = 1, high = 5,
            markerStart = 12, markerColor = 'Black', textSize = .6, textColor = 'Black', lineColor = 'Black', showAccept = False, mouseOnly = True,
            pos=(0,0), size= 1, marker = 'circle', textFont = 'Open Sans', labels = labels_2,
            acceptKeys = 'b', scale = '1 = helemaal niet belangrijk                    5 = heel erg belangrijk')

        check_3 = visual.RatingScale( # dichotomous
            win, low = 1, high = 5, scale = '1 = helemaal niet realistisch                    5 = heel erg realistisch', mouseOnly = True,
            markerStart = 12, markerColor = 'Black', textColor = 'Black', lineColor = 'Black', showAccept = False,
            pos=(0,-300), size=1, marker = 'circle', textSize = .6, labels = labels_2,
            acceptKeys = 'b', textFont = 'Open Sans')

        check_text = visual.TextStim(win, text="", height=.025, units='height', pos=(0, .4), color = 'Black')
        #tickMarks = label,
      Begin Routine:
        win.mouseVisible = True
        while continueRoutine == True: # main loop
            check_1.draw() # draw all items, likert scales, and the next button text
            check_2.draw()
            check_3.draw()
            check_text.draw()
            check_text.setText(scenario_text)
            next_text_2.draw()
            win.flip()

            if event.getKeys(keyList=['escape']): # quit experiment
                core.quit()
            if event.getKeys(keyList=['return']):
                likerttest.addData('danger', check_1.getRating()) # crucially, add likert data once enter is pressed
                likerttest.addData('relevance', check_2.getRating())
                likerttest.addData('realism', check_3.getRating())
                check_1.reset()
                check_2.reset()
                check_3.reset()
                check_1.markerStart = 12 # resets marker to a value beyond the scale. This means in the next trial it is not visible before a value has been entered
                check_2.markerStart = 12
                check_3.markerStart = 12
                continueRoutine = False # go to next routine
      End Routine:
        win.mouseVisible = False
  Routine check_instruction
    TextboxComponent instr_forced_text_2
      autoLog = False
      bold = False
      borderWidth = .05
      color = black
      editable = False
      letterHeight = 0.025
      padding = 0.1
      saveStartStop = False
      size = (0.95, 0.95)
      startVal [time (s)] = 0.0
      units = height
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      text:
        In het laatste deel van het experiment zijn wij geïnteresseerd in de manier waarop je de scenario's die je tijdens het experiment hebt gehoord, hebt waargenomen. Beantwoord de vragen die je op je scherm ziet door je buikgevoel te volgen.

        Beantwoord de vragen met een muisklik.
    TextboxComponent next_text_18
      autoLog = False
      bold = False
      borderColor = black
      color = black
      editable = False
      letterHeight = 0.02
      padding = 0.01
      pos = (.45, -0.4)
      saveStartStop = False
      size = (.2,.08)
      startVal [time (s)] = 0.0
      text = druk op “enter” om naar het scenario te luisteren
      units = height
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    KeyboardComponent next_press_19
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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Flow
  Routine hide_mouse
  Routine info1
  Routine w
  Routine info2
  Routine w
  Routine info3
  Routine w
  Routine info4
  Routine w
  Routine consent
  Routine w
  Routine pre_instructions_1
  Routine w
  Routine pre_instructions_2
  Routine w
  Routine training_1_instructions
  Routine w
  LoopInitiator training_1_trials loopType="TrialHandler"
    conditionsFile = condition files/conditions_training_1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'trial_nr_t1': 1, 'soundpath_t1': 'stimuli/training1_1.ogg', 'duration_t1': 7},
      {'trial_nr_t1': 2, 'soundpath_t1': 'stimuli/training1_2.ogg', 'duration_t1': 8}]
    Routine training_1_trial_1
    Routine w
    Routine likert
    Routine w
  LoopTerminator training_1_trials
  Routine training_2_instructions_1
  Routine w
  Routine training_2_instructions_2
  Routine w
  Routine pre_t3_instructions
  Routine w
  Routine pre_t3_instructions_2
  Routine w
  Routine training_2_instructions_3
  Routine w
  LoopInitiator training_2_trials loopType="TrialHandler"
    conditionsFile = condition files/conditions_training_2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'trial_nr_t2': 1, 'soundpath_t2': 'stimuli/training2_1.ogg', 'duration_t2': 5},
      {'trial_nr_t2': 2, 'soundpath_t2': 'stimuli/training2_2.ogg', 'duration_t2': 5}]
    Routine training_2_trial_1
    Routine w
  LoopTerminator training_2_trials
  Routine training_3_instructions
  Routine w
  LoopInitiator training_3_trials loopType="TrialHandler"
    conditionsFile = condition files/conditions_training_3.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'trial_nr_t3': 1, 'soundpath_t3': 'stimuli/training3_1.ogg', 'duration_t3': 6},
      {'trial_nr_t3': 2, 'soundpath_t3': 'stimuli/training3_2.ogg', 'duration_t3': 6}]
    Routine training_3_trial_1
    Routine w
    Routine training_3_trial_2
    Routine w
  LoopTerminator training_3_trials
  Routine w
  Routine instr_free
  Routine w
  LoopInitiator free_trials loopType="TrialHandler"
    conditionsFile = condition files/conditions_free.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'trial_nr_free': 1, 'soundpath_free': 'stimuli/1ha.ogg', 'duration_free': 6},
      {'trial_nr_free': 2, 'soundpath_free': 'stimuli/1hb.ogg', 'duration_free': 6},
      {'trial_nr_free': 3, 'soundpath_free': 'stimuli/1na.ogg', 'duration_free': 5},
      {'trial_nr_free': 4, 'soundpath_free': 'stimuli/1nb.ogg', 'duration_free': 5},
      {'trial_nr_free': 5, 'soundpath_free': 'stimuli/2ha.ogg', 'duration_free': 4},
      {'trial_nr_free': 6, 'soundpath_free': 'stimuli/2hb.ogg', 'duration_free': 4},
      {'trial_nr_free': 7, 'soundpath_free': 'stimuli/2na.ogg', 'duration_free': 6},
      {'trial_nr_free': 8, 'soundpath_free': 'stimuli/2nb.ogg', 'duration_free': 6},
      {'trial_nr_free': 9, 'soundpath_free': 'stimuli/3ha.ogg', 'duration_free': 5},
      {'trial_nr_free': 10, 'soundpath_free': 'stimuli/3hb.ogg', 'duration_free': 5},
      {'trial_nr_free': 11, 'soundpath_free': 'stimuli/3na.ogg', 'duration_free': 5},
      {'trial_nr_free': 12, 'soundpath_free': 'stimuli/3nb.ogg', 'duration_free': 5},
      {'trial_nr_free': 13, 'soundpath_free': 'stimuli/4ha.ogg', 'duration_free': 6},
      {'trial_nr_free': 14, 'soundpath_free': 'stimuli/4hb.ogg', 'duration_free': 6},
      {'trial_nr_free': 15, 'soundpath_free': 'stimuli/4na.ogg', 'duration_free': 7},
      {'trial_nr_free': 16, 'soundpath_free': 'stimuli/4nb.ogg', 'duration_free': 7},
      {'trial_nr_free': 17, 'soundpath_free': 'stimuli/5ha.ogg', 'duration_free': 5},
      {'trial_nr_free': 18, 'soundpath_free': 'stimuli/5hb.ogg', 'duration_free': 5},
      {'trial_nr_free': 19, 'soundpath_free': 'stimuli/5na.ogg', 'duration_free': 7}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
    Routine free_trial
    Routine w
    Routine free_trial_2
    Routine w
  LoopTerminator free_trials
  Routine free_debrief
  Routine w
  Routine training_4_instructions
  Routine w
  LoopInitiator training_4_trials loopType="TrialHandler"
    conditionsFile = condition files/conditions_training_4.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'trial_nr_t4': 1, 'soundpath_t4': 'stimuli/training1_1.ogg', 'duration_t4': 7},
      {'trial_nr_t4': 2, 'soundpath_t4': 'stimuli/training1_2.ogg', 'duration_t4': 8},
      {'trial_nr_t4': 3, 'soundpath_t4': 'stimuli/training2_1.ogg', 'duration_t4': 5},
      {'trial_nr_t4': 4, 'soundpath_t4': 'stimuli/training2_2.ogg', 'duration_t4': 5}]
    Routine training_4
    Routine w
    Routine t4_incorrect
    Routine w
    Routine t4_trial_2
    Routine w
  LoopTerminator training_4_trials
  Routine instr_forced
  Routine w
  LoopInitiator forced_trials loopType="TrialHandler"
    conditionsFile = condition files/conditions_forced.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'trial_nr_forced': 1, 'soundpath_forced': 'stimuli/1ha.ogg', 'duration_forced': 6},
      {'trial_nr_forced': 2, 'soundpath_forced': 'stimuli/1hb.ogg', 'duration_forced': 6},
      {'trial_nr_forced': 3, 'soundpath_forced': 'stimuli/1na.ogg', 'duration_forced': 5},
      {'trial_nr_forced': 4, 'soundpath_forced': 'stimuli/1nb.ogg', 'duration_forced': 5},
      {'trial_nr_forced': 5, 'soundpath_forced': 'stimuli/2ha.ogg', 'duration_forced': 4},
      {'trial_nr_forced': 6, 'soundpath_forced': 'stimuli/2hb.ogg', 'duration_forced': 4},
      {'trial_nr_forced': 7, 'soundpath_forced': 'stimuli/2na.ogg', 'duration_forced': 6},
      {'trial_nr_forced': 8, 'soundpath_forced': 'stimuli/2nb.ogg', 'duration_forced': 6},
      {'trial_nr_forced': 9, 'soundpath_forced': 'stimuli/3ha.ogg', 'duration_forced': 5},
      {'trial_nr_forced': 10, 'soundpath_forced': 'stimuli/3hb.ogg', 'duration_forced': 5},
      {'trial_nr_forced': 11, 'soundpath_forced': 'stimuli/3na.ogg', 'duration_forced': 5},
      {'trial_nr_forced': 12, 'soundpath_forced': 'stimuli/3nb.ogg', 'duration_forced': 5},
      {'trial_nr_forced': 13, 'soundpath_forced': 'stimuli/4ha.ogg', 'duration_forced': 6},
      {'trial_nr_forced': 14, 'soundpath_forced': 'stimuli/4hb.ogg', 'duration_forced': 6},
      {'trial_nr_forced': 15, 'soundpath_forced': 'stimuli/4na.ogg', 'duration_forced': 7},
      {'trial_nr_forced': 16, 'soundpath_forced': 'stimuli/4nb.ogg', 'duration_forced': 7},
      {'trial_nr_forced': 17, 'soundpath_forced': 'stimuli/5ha.ogg', 'duration_forced': 5}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
    Routine forced_trial_1
    Routine w
    Routine forced_trial_incorrect
    Routine w
    Routine forced_trial_2
    Routine w
  LoopTerminator forced_trials
  Routine check_instruction
  Routine w
  LoopInitiator likerttest loopType="TrialHandler"
    conditionsFile = condition files/conditions_likert_check.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'scenario_number': 1, 'scenario_text': 'Een buurvrouw morst een vloeistof in het laboratorium. De vloeistof is een giftige stof die ze inademt.'},
      {'scenario_number': 2, 'scenario_text': 'Een buurvrouw morst een vloeistof in het laboratorium. Ze veegt het gemorste water op.'},
      {'scenario_number': 3, 'scenario_text': 'Een buurman glijdt uit in een gladde gang. Hij valt op zijn rug.'},
      {'scenario_number': 4, 'scenario_text': 'Een buurman glijdt uit in een gladde gang. Hij struikelt, maar vindt zijn evenwicht en gaat verder.'},
      {'scenario_number': 5, 'scenario_text': 'Een buurvrouw slaat op haar hand met een Hamer. Ze heeft pijn en bloedt uit de wond.'},
      {'scenario_number': 6, 'scenario_text': 'Een buurvrouw  slaat op haar hand met een Hamer. Ze zegt "ouch" maar werkt dan verder.'},
      {'scenario_number': 7, 'scenario_text': 'Een goede vriendin fietst op een straat wanneer een stuk steiger voor haar neerstort. Ze kan het obstakel niet ontwijken.'},
      {'scenario_number': 8, 'scenario_text': 'Een goede vriendin fietst op een straat wanneer een stuk steiger voor haar neerstort. Ze kan het obstakel gemakkelijk ontwijken.'},
      {'scenario_number': 9, 'scenario_text': 'Een goede vriend staat op het spoor terwijl er een trein nadert. Hij is zich niet bewust van de trein.'},
      {'scenario_number': 10, 'scenario_text': 'Een goede vriend staat op het spoor terwijl er een trein nadert. Hij rijdt snel naar de andere kant en blijft ontspannen rijden.'}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
    Routine check_likert
    Routine w
  LoopTerminator likerttest
  Routine debriefing
